// START: PARAMETERS
// file locations
path = "D://accent//acq//"; // Path to save the tif stacks 
// (NB: whether they are saved as stacks or single images is set in the MDA menu of Micro-Manager)
		
acqName = "accent_mm1_"; // Name of the acquisition

// acquisition settings
int[] exposures = {1,10,200,600}; // Exposure times in ms
numFrames = 20000; // number of frames
		
mmc.setROI(128,128,256,256); // ROI on camera: (x0, y0, width, hight). Uncomment to use preset ROI in Micro-Manager
// NB: Command mmc.setROI is not supported with all cameras. 
// In case of error, comment out and preset ROI via GUI in MicroManager
// END: PARAMETERS

// NB: If all acquisitions are created in a "Pos0" folder, you will have to rename them and copy them in the same
// folder to use them with the Fiji or MM2 plugin. 

import org.micromanager.api.AcquisitionOptions;
import ij.*;
import ij.IJ;

// clear all previous acquisitions
gui.closeAllAcquisitions();
gui.clearMessageWindow();

file = acqName;
channels = 1;
numSlices = 1;
channelGroup = "Channel";
boolean show_acq = false;
boolean save_acq = true;

mmc.waitForSystem();

// get roi and write it to name
Rectangle r = mmc.getROI();
acqName = acqName+"x"+r.x+"_y"+r.y+"_w"+r.width+"_h"+r.height+"_";

// open acquisitions for all exposure times
for (int j=0; j<exposures.length; j++){
	gui.openAcquisition(acqName + exposures[j]  + "ms", path, numFrames, channels, numSlices, j, show_acq, save_acq);
} 

for (int n=0; n<numFrames; n++){
	for (int j=0; j<exposures.length; j++){
		mmc.setExposure(exposures[j]);
		gui.snapAndAddImage(acqName + exposures[j] + "ms", n, 0, 0, 0);
		gui.message("Frame: " + (n+1) + " of " + numFrames + ", Exposure: " + exposures[j] + " ms");
	}
}

gui.closeAllAcquisitions();
